PsychoPy2experiment version="2026.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = cog_mod_1_exercise
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine intro
    RoutineSettingsComponent intro
      desc = 1 .1 1.
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    TextComponent text_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is an experiment to see how well you can spot the differences.


        Kresmir & Emil

        [press space to continue]
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test
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    ImageComponent image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for taking part in the experiment!

        [press space to finish]
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  LoopInitiator test_loop loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine test
  LoopTerminator test_loop
  Routine end
